graphs:
  - id: Process
    nodes:
      - id: sub
        module: timeflux.nodes.zmq
        class: Sub
        params:
          topics: [raw_eeg, sp_events]

      - id: pub_tx_events_fit
        module: timeflux.nodes.zmq
        class: Pub
        params:
          topic: tx_events

      - id: pub_tx_events_cv
        module: timeflux.nodes.zmq
        class: Pub
        params:
          topic: tx_events

      - id: pub_tx_events_prediction
        module: timeflux.nodes.zmq
        class: Pub
        params:
          topic: tx_events

      - id: dejitter
        module: timeflux.nodes.dejitter
        class: Interpolate
        params:
          rate: 200
      - id: epochs
        module: timeflux.nodes.epoch
        class: Epoch
        params:
          before: 0.0
          after: 0.6
          event_trigger: flash_begins
      - id: to_xarray
        module: timeflux.nodes.epoch
        class: ToXArray
        params:
          output: DataArray
          context_key: includes_target
      - id: gate_training
        module: timeflux.nodes.gate
        class: Gate
        params:
          event_opens: training_begins
          event_closes: training_ends

      - id: append_epochs
        module: timeflux.nodes.accumulate
        class: AppendDataArray
        params:
          dim: target
          meta_keys: [epochs_context, epochs_onset]

      - id: reshape_epochs
        module: timeflux.nodes.xarray
        class: Transpose
        params:
          dims: [target, space, time]

      - id: fit
        module: timeflux_ml.nodes.cross_validate
        class: CrossValidate
        params:
          pipeline_steps:
#            removeflat: pyriemann.channelselection.FlatChannelRemover
#            selectchann: pyriemann.channelselection.ElectrodeSelection
            cov: pyriemann.estimation.ERPCovariances
            proj: pyriemann.tangentspace.TangentSpace
            clf: pyriemann.classification.LogisticRegression
          pipeline_params:
#            selectchann__nelec: 8
            cov__estimator: oas
            proj__metric: riemann
            clf__solver: lbfgs

      - id: cv
        module: timeflux_ml.nodes.cross_validate
        class: CrossValidate
        params:
          pipeline_steps:
            removeflat: pyriemann.channelselection.FlatChannelRemover
#            selectchann: pyriemann.channelselection.ElectrodeSelection
            cov: pyriemann.estimation.ERPCovariances
            proj: pyriemann.tangentspace.TangentSpace
            clf: pyriemann.classification.LogisticRegression
          pipeline_params:
#            selectchann__nelec: 8
            cov__estimator: oas
            proj__metric: riemann
            clf__solver: lbfgs
      - id: predict
        module: timeflux_ml.nodes.predict
        class: PredictProba


      - id: gate_testing
        module: timeflux.nodes.gate
        class: Gate
        params:
          event_opens: block_begins
          event_closes: block_ends

      - id: append_predictions
        module: timeflux.nodes.accumulate
        class: AppendDataFrame
        params:
          meta_keys: [epochs_context, epochs_onset]

      - id: inference
        module: timeflux_bci.nodes.p300
        class: NaiveBayesInference

      - id: display
        module: timeflux.nodes.debug
        class: Display
    edges:
      - source: sub:raw_eeg
        target: dejitter
      - source: dejitter
        target: epochs
      - source: sub:sp_events
        target: epochs:events
      - source: epochs:*
        target: to_xarray
      - source: to_xarray
        target: reshape_epochs
      - source: reshape_epochs
        target: gate_training
      - source: sub:sp_events
        target: gate_training:events
      - source: gate_training
        target: append_epochs
      - source: append_epochs
        target: fit
      - source: append_epochs
        target: cv
      - source: cv:events
        target: pub_tx_events_cv
      - source: fit:events
        target: pub_tx_events_fit
      - source: fit:model
        target: predict:model
      - source: reshape_epochs
        target: predict
      - source: sub:sp_events
        target: gate_testing:events
      - source: predict
        target: gate_testing
      - source: gate_testing
        target: append_predictions
      - source: sub:sp_events
        target: inference:events
      - source: append_predictions
        target: inference
      - source: inference:events
        target: pub_tx_events_prediction
